PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = seven_experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'bottle'},
      {'study_word': 'laptop'},
      {'study_word': 'pen'},
      {'study_word': 'college'},
      {'study_word': 'cook'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_words', 'v_s_'), ('reference', 'vase'), ('cond', 'prime')]),
      OrderedDict([('test_words', 't_g_r'), ('reference', 'tiger'), ('cond', 'prime')]),
      OrderedDict([('test_words', 'b_ _k'), ('reference', 'book'), ('cond', 'prime')]),
      OrderedDict([('test_words', 'c_s_i_n'), ('reference', 'cushion'), ('cond', 'prime')]),
      OrderedDict([('test_words', '_ia_o'), ('reference', 'piano'), ('cond', 'prime')]),
      OrderedDict([('test_words', 'b_o_tl_'), ('reference', 'bottle'), ('cond', 'prime')]),
      OrderedDict([('test_words', 'l_p_o_'), ('reference', 'laptop'), ('cond', 'prime')]),
      OrderedDict([('test_words', '_en'), ('reference', 'pen'), ('cond', 'prime')]),
      OrderedDict([('test_words', 'c_ll_g_'), ('reference', 'college'), ('cond', 'prime')]),
      OrderedDict([('test_words', '_o_k'), ('reference', 'cook'), ('cond', 'prime')]),
      OrderedDict([('test_words', 'p_o_e'), ('reference', 'phone'), ('cond', 'non-prime')]),
      OrderedDict([('test_words', 't_le_or_'), ('reference', 'teleport'), ('cond', 'non-prime')]),
      OrderedDict([('test_words', '_oa_d'), ('reference', 'board'), ('cond', 'non-prime')]),
      OrderedDict([('test_words', 'n_il_'), ('reference', 'nails'), ('cond', 'non-prime')]),
      OrderedDict([('test_words', 'cl_c_'), ('reference', 'clock'), ('cond', 'non-prime')]),
      OrderedDict([('test_words', 's_o_'), ('reference', 'shoe'), ('cond', 'non-prime')]),
      OrderedDict([('test_words', 'c_m_r_'), ('reference', 'camera'), ('cond', 'non-prime')])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
    Routine test
  LoopTerminator trials_2
